CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileName>.*)_c(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:CEp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI_RescaleIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RescaleIntensity:[module_num:7|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
    Select the input image:Golgi
    Name the output image:Golgi_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:Golgi_RescaleIntensity
    Name the output image:Golgi_Enhance
    Select the operation:Enhance
    Feature size:5
    Feature type:Texture
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    Smoothing scale:2.0
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
GaussianFilter:[module_num:9|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
    Select the input image:Golgi_Enhance
    Name the output image:Golgi_GaussianFilter
    Sigma:4

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Golgi_GaussianFilter
    Name the primary objects to be identified:Golgi
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:Golgi
    Name the output objects:GolgiExpanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
RescaleIntensity:[module_num:12|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
    Select the input image:CEp
    Name the output image:CEp_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:CEp_RescaleIntensity
    Name the output image:CEp_Enhance
    Select the operation:Enhance
    Feature size:5
    Feature type:Texture
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    Smoothing scale:2.0
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
ImageMath:[module_num:14|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
    Operation:Log transform (base 2)
    Raise the power of the result by:0.85
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CEp_Enhance_Math
    Image or measurement?:Image
    Select the first image:CEp_Enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
FindMaxima:[module_num:15|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
    Select the input image:CEp_Enhance_Math
    Name the output image:CEp_max
    Minimum distance between maxima:10
    Method for excluding background:Threshold
    Specify the minimum intensity of a peak:0.01
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    Select the objects to search within:GolgiExpanded

ConvertImageToObjects:[module_num:16|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
    Select the input image:CEp_max
    Name the output object:CEp_max_obj
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:CEp_max_obj
    Name the output objects:Centrosome
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
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
RelateObjects:[module_num:18|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
    Parent objects:GolgiExpanded
    Child objects:Centrosome
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TrueCentrosome
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:CEp_RescaleIntensity
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:5
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:Cell
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
RemoveHoles:[module_num:21|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
    Select the input image:CellImage
    Name the output image:CellImageRemoveHoles
    Size of holes to fill:560

ImageMath:[module_num:22|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CellImageInvert
    Image or measurement?:Image
    Select the first image:CellImageRemoveHoles
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertImageToObjects:[module_num:23|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
    Select the input image:CellImageInvert
    Name the output object:CellImageInvertToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:Cell
    Select neighboring objects to measure:CellImageInvertToObjects
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:Cell
    Name the output objects:Cell_IN
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Cell_OUT
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_CellImageInvertToObjects_Expanded
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
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
RelateObjects:[module_num:26|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
    Parent objects:Cell_IN
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:27|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
    Parent objects:Cell_OUT
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:28|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
    Parent objects:Cell_IN
    Child objects:TrueCentrosome
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:29|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
    Parent objects:Cell_OUT
    Child objects:TrueCentrosome
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CEp_RescaleIntensity
    Name the output image:CEp_detection
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:TrueCentrosome
    Select outline color:Green
    Select objects to display:Cell_IN
    Select outline color:Blue
    Select objects to display:Nuclei
    Select outline color:Yellow
    Select objects to display:Cell_OUT

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:CEp_detection
    Select method for constructing file names:From image filename
    Select image name for file prefix:CEp
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|PathName_DAPI,Image|FileName_DAPI,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|Parent_Cell_OUT,Nuclei|Parent_Cell_IN,TrueCentrosome|Location_Center_X,TrueCentrosome|Location_Center_Y,TrueCentrosome|Parent_Cell_IN,TrueCentrosome|Parent_Cell_OUT
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:TrueCentrosome
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
